PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1710, 1112]
  expName = delay discounting pra
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 61, 'future_reward': 73, 'delay': 57},
      {'reward_today': 24, 'future_reward': 50, 'delay': 176},
      {'reward_today': 70, 'future_reward': 77, 'delay': 164},
      {'reward_today': 30, 'future_reward': 35, 'delay': 164},
      {'reward_today': 33, 'future_reward': 40, 'delay': 72},
      {'reward_today': 12, 'future_reward': 21, 'delay': 127},
      {'reward_today': 31, 'future_reward': 50, 'delay': 149},
      {'reward_today': 62, 'future_reward': 80, 'delay': 42},
      {'reward_today': 11, 'future_reward': 18, 'delay': 28},
      {'reward_today': 39, 'future_reward': 44, 'delay': 73},
      {'reward_today': 47, 'future_reward': 56, 'delay': 120},
      {'reward_today': 11, 'future_reward': 41, 'delay': 102},
      {'reward_today': 73, 'future_reward': 100, 'delay': 143},
      {'reward_today': 69, 'future_reward': 87, 'delay': 148},
      {'reward_today': 30, 'future_reward': 41, 'delay': 101},
      {'reward_today': 42, 'future_reward': 55, 'delay': 128},
      {'reward_today': 67, 'future_reward': 86, 'delay': 74},
      {'reward_today': 31, 'future_reward': 50, 'delay': 97},
      {'reward_today': 58, 'future_reward': 88, 'delay': 7},
      {'reward_today': 68, 'future_reward': 82, 'delay': 152}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
    Routine trial
  LoopTerminator trials
