PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1710, 1112]
  expName = word_priming_sp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent StudySlider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Phase
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/charvithakkar/Library/CloudStorage/OneDrive-Personal/Documents/study_word_sp.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'carpet'},
      {'study_word': 'sandwich'},
      {'study_word': 'memory'},
      {'study_word': 'hose'},
      {'study_word': 'booth'},
      {'study_word': 'laughter'},
      {'study_word': 'whilst'},
      {'study_word': 'minimum'},
      {'study_word': 'cruise'},
      {'study_word': 'quill'},
      {'study_word': 'parlance'},
      {'study_word': 'audacious'},
      {'study_word': 'alluvium'},
      {'study_word': 'beguile'},
      {'study_word': 'insipid'},
      {'study_word': 'cacophony'},
      {'study_word': 'esoteric'},
      {'study_word': 'parsimony'},
      {'study_word': 'vicarious'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/charvithakkar/Library/CloudStorage/OneDrive-Personal/Documents/test_words_sp.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'b_o_', 'Reference': 'book', 'old_new': 'old'},
      {'test_word': '_ a_pe_', 'Reference': 'carpet', 'old_new': 'old'},
      {'test_word': 'sa_d_ _ c_', 'Reference': 'sandwich', 'old_new': 'old'},
      {'test_word': '_e_or_', 'Reference': 'memory', 'old_new': 'old'},
      {'test_word': '_os_', 'Reference': 'hose', 'old_new': 'old'},
      {'test_word': '_oo_h', 'Reference': 'booth', 'old_new': 'old'},
      {'test_word': 'la_g_ _e_', 'Reference': 'laughter', 'old_new': 'old'},
      {'test_word': '_h_ls_', 'Reference': 'whilst', 'old_new': 'old'},
      {'test_word': '_in_ _u_', 'Reference': 'minimum', 'old_new': 'old'},
      {'test_word': '_ru_s_', 'Reference': 'cruise', 'old_new': 'old'},
      {'test_word': '_ui_ _', 'Reference': 'quill', 'old_new': 'old'},
      {'test_word': '_a_l_nc_', 'Reference': 'parlance', 'old_new': 'old'},
      {'test_word': 'a_da_i_ _s', 'Reference': 'audacious', 'old_new': 'old'},
      {'test_word': '_l_u_ia_', 'Reference': 'alluvium', 'old_new': 'old'},
      {'test_word': 'b_gu_l_', 'Reference': 'beguile', 'old_new': 'old'},
      {'test_word': 'i_si_i_', 'Reference': 'insipid', 'old_new': 'old'},
      {'test_word': 'ca_o_h_ _y', 'Reference': 'cacophony', 'old_new': 'old'},
      {'test_word': 'e_o_ _r_c', 'Reference': 'esoteric', 'old_new': 'old'},
      {'test_word': 'pa_s_m_ _y', 'Reference': 'parsimony', 'old_new': 'old'},
      {'test_word': '_i_a _io_s', 'Reference': 'vicarious', 'old_new': 'old'},
      {'test_word': 'c_ _hi_n', 'Reference': 'cushion', 'old_new': 'new'},
      {'test_word': 'p_ _e', 'Reference': 'page', 'old_new': 'new'}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
    Routine Test_Phase
  LoopTerminator trials_2
